strdef fitFile,timesFile,paramsFile,stimFile,outFile,modelFile,outFPre,base
objref st,stims,fin,fout,pmat,matOut,stimtime,somaref,secref,extVec,strFunc,most,root,transvec

ntimestep = 3168 
nparams = 28 
psize = 1 
ntraces = 1 
v_init = -80 
calc_eca = 1 


   stLoc = 0.41 
base = "e:/GitHub/NeuroGPU/NeuroGPU_Base/" 
paramsFile = "./params/params.csv" 
stimFile = "./Stims/Step_8_.csv" 
modelFile = "./mosinit.hoc" 
timesFile = "./Stims/times.csv" 

transvec = new Vector(nparams)

fin = new File()
fout = new File()
load_file(modelFile)


root = new SectionRef()
if (root.has_parent()){
	print secname()
	root = root.root()
	}
access bSTUT213_L5_NBC_bb8fc44e15[0].soma

create Exts[1]
objref recSites
recSites = new SectionList()
outFPre = "./volts/orig_step"
access root.sec
print "**********************"
print secname()
root.sec recSites.append()


 
secondorder=0
proc runMatrix(){

	//access dend[1]
	sprint(outFile,"%s_%s.dat",outFPre,secname())

	st.del=0 
	st.dur=1e9
	//printf ("$o1.nrow,$o2.nrow,$o2.ncol,%d,%d,%d",$o1.nrow,$o2.nrow,$o2.ncol)
	matOut = new Matrix($o1.nrow,($o2.nrow*$o2.ncol))
	for(sim=0;sim<$o1.nrow;sim+=1){
	//printf("running sim %d\n",sim)
		counter=0
		transvec = $o1.getrow(sim)
		tfunc()
		for(i=0;i<stims.nrow;i+=1){
			finitialize(v_init)
			for(tt =0;tt<stimtime.ncol;tt+=1){
			dt  =stimtime.x(0,tt)

				st.amp = 1*stims.x(i,tt)

				matOut.x(sim,counter)=v(0.5)
				counter+=1
				fadvance()
				
			}
		}
	}
	//printf("finshed run matrix %s\n",outFile)
}
strFunc = new StringFunctions()
proc readMatrix(){localobj temp
	csv_ind = strFunc.substr($s1,"csv")
	if (csv_ind==-1){
		temp = new Vector()
		fin.ropen($s1)
		for (i=0;i<$o2.nrow;i+=1){
			temp.vread(fin)
			$o2.setrow(i,temp)
			//print i
		}
		fin.close()
	} else {
	readCSVMatrix($s1,$o2)
	}
}

proc readCSVMatrix(){
	fin = new File($s1)
	fin.ropen()
	print $o2.nrow()
	$o2.scanf(fin,$o2.nrow(),$o2.ncol())
	fin.close()
}
proc writeMatrix(){localobj temp
	fout.wopen($s1)
	temp = new Vector()
	for (i=0;i<$o2.nrow;i+=1){
		temp = $o2.getrow(i)
		temp.vwrite(fout,3)
	}
	fout.close()
}
proc mul32(){localobj thisone
	countSegs()
	segsMat = segs+comps+1 
	//printf("1we have a matrix in the size of %d \n",segsMat )
	segsToAdd = 32-segsMat%32
	forall {
		thisone = new SectionRef()   
		if (thisone.nchild == 0 ) {
			break
			}
	}
	access thisone.sec
	nseg = nseg+segsToAdd
	fcurrent()
	countSegs()
	//printf("we have a matrix in the size of %d \n",segs+comps+1 )
	
}
proc writeVector(){
	fout.aopen($s1)
	$o2.vwrite(fout,3)
	fout.close()
	
}
proc printChildren(){localobj sl
	sl = new SectionList()
	sl.children()
	u=0
	forsec sl{
	print secname()
	u+=1
	}
	print u
}	
proc printparent(){localobj sref
	sref = new SectionRef()
	sref.parent
	print secname()
}		


proc countSegs(){
segs=0
comps=0
	forall{
		segs+=nseg
		comps+=1
	}
}
create Exts[1]		
proc hinesDisperseBranching(){local i localobj sl,secRef, clist, avec, bvec		
	counter = 0		
	forsec most{		
		secRef = new SectionRef()		
		if(secRef.nchild>2){		
clist = new List()		
  for i=0, secRef.nchild-1 {		
    secRef.child[i] clist.append(new SectionRef())		
  }		
			Exts[counter]{		
				L = 1e-9		
				diam = 1		
				Ra = secRef.sec.Ra		
				cm = secRef.sec.cm	
				nseg = secRef.nchild-1		
			}		
			i=0		
			Exts[counter]{		
				for(x){ 		
					if (x > 0) {		
						avec =new Vector()		
						bvec =new Vector()		
						//printf("x is %f i is %d\n",x,i)		
						clist.o(i).sec{		
							avec =new Vector()		
							bvec =new Vector()		
							for(y){		
								avec.append(GetA(y))		
								bvec.append(GetB(y))		
							}		
						}		
						connect clist.o(i).sec(0), x		
						 k=0		
					  clist.o(i).sec{		
							for(y){		
								SetA(y,avec.x(k))		
								SetB(y,bvec.x(k))		
							}		
						}		
						i +=1		
							
					}		
							
							
				}		
						
			}		
			fcurrent()		
			secRef {		
				connect Exts[counter](0), 1		
			}		
			Exts[counter]{		
				for(x){ 		
			//printf("x is %f and sec is %s\n",x,secname())		
					SetA(x,0)		
					SetB(x,0)		
					}		
				}		
					
	counter+=1				
		}		
	}
		//print "printing counter"
		//print counter
		
		
}

proc countExts(){
ext_num=0
forsec most {
	somaref= new SectionRef()
	if (somaref.nchild>2){
		ext_num+=1
	}
	}
	
	//printf("ext_num is %d", ext_num)
}



proc PrintRecSites(){localobj sref
	recSites.printnames()
}	
stimtime = new Matrix(1,ntimestep)
readMatrix(timesFile,stimtime)
pmat = new Matrix(psize,nparams)
readMatrix(paramsFile,pmat)
stims = new Matrix(ntraces,ntimestep)
readCSVMatrix(stimFile,stims)
forsec "dend" nseg=1
forsec "apic" nseg=1
	
//topology()
most = new SectionList()
forall most.append()
countExts()
fcurrent()
//fmatrix()
//printf("Creating Exts %d\n",ext_num)
//printf("Creating Exts %d\n",ext_num)
if(ext_num>0){
	create Exts[ext_num]
	}	else{
	access Exts[0]
		delete_section()
	}
//****************************************************
//forall{nseg=1}
//******************************************************
hinesDisperseBranching()

mul32()
access root.sec
transvec = pmat.getrow(0)
tfunc()
st = new IClamp(0.5)



 
finitialize(v_init)



//runMatrix(pmat,stims)
//writeMatrix(outFile,matOut)
finitialize(v_init)
//ADD STUFF HERE

//quit()// Start topologyList output

// Start mechanisms output
objref mt,ms,fn,pp
strdef s,ss,mname
mt = new MechanismType(0)
fn = new File()
fn.wopen("64MDL.csv")
forall{
	fn.printf("#%s\n",secname())
	if (ismembrane("pas")){
		fn.printf("g_pas = %f\n",g_pas)
		fn.printf("e_pas = %f\n",e_pas)
	}
	for i=0, mt.count()-1 {
		mt.select(i)
		mt.selected(mname)
		if (ismembrane(mname)){
			ms = new MechanismStandard(mname,-1)
			for j=0, ms.count()-1 {
				k = ms.name(s, j)
				sprint(ss,"temp=%s",s)
				execute(ss)
				fn.printf("%s = %f\n",s,temp)
			}
			ms = new MechanismStandard(mname,3)
			for j=0, ms.count()-1 {
				k = ms.name(s, j)
				sprint(ss,"temp=%s",s)
				execute(ss)
				fn.printf("%s = %f\n",s,temp)
			}
		}
	}
}
fn.close()
// End mechanisms output
// Start point processess mechanisms output
fn = new File()
fn.wopen("64PP.csv")
forall{
	fn.printf("#%s\n",secname())
	mt = new MechanismType(1)
	mt.select("IClamp")
	for (pp = mt.pp_begin(); object_id(pp) != 0; pp = mt.pp_next()) {
		x = pp.get_loc()
		del1 = pp.del
		dur1 = pp.dur
		amp1 = pp.amp
		fn.printf("IClamp,%g, %g, %g, %g, ", x, del1, dur1, amp1)
		pop_section()
	}
	fn.printf("\n")
}
fn.close()
// End point processess mechanisms output
// Start params output
objref fn2
fn2 = new File()
proc writeReversals(){
access bSTUT213_L5_NBC_bb8fc44e15[0].soma[0]
a=eca
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].soma[0]
a=ek
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].soma[0]
a=ena
fn.vwrite(&a)
}
proc writeGGlobals(){
a=celsius
fn.vwrite(&a)
a=stoprun
fn.vwrite(&a)
a=clamp_resist
fn.vwrite(&a)
a=secondorder
fn.vwrite(&a)
}
proc writeNGlobals(){
a=vmin_StochKv
fn.vwrite(&a)
a=vmax_StochKv
fn.vwrite(&a)
a=q10_StochKv
fn.vwrite(&a)
a=temp_StochKv
fn.vwrite(&a)
a=tadj_StochKv
fn.vwrite(&a)
}
proc proc0(){
access bSTUT213_L5_NBC_bb8fc44e15[0].soma[0]
a=gCabar_Ca
fn.vwrite(&a)
a=gCa_LVAstbar_Ca_LVAst
fn.vwrite(&a)
a=gamma_CaDynamics_E2
fn.vwrite(&a)
a=decay_CaDynamics_E2
fn.vwrite(&a)
a=depth_CaDynamics_E2
fn.vwrite(&a)
a=minCai_CaDynamics_E2
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSK_E2bar_SK_E2
fn.vwrite(&a)
a=zTau_SK_E2
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[0]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc1(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[1]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[2]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc2(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[3]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[4]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc3(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[5]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[6]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc4(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[7]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[8]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc5(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[9]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[10]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc6(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[11]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[12]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc7(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[13]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[14]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc8(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[15]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[16]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc9(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[17]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[18]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc10(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[19]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[20]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc11(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[21]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[22]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc12(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[23]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[24]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc13(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[25]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[26]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc14(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[27]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[28]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc15(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[29]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[30]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc16(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[31]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[32]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc17(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[33]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[34]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc18(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[35]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[36]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc19(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[37]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[38]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc20(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[39]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[40]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc21(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[41]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[42]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc22(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[43]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[44]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc23(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[45]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[46]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc24(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[47]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[48]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc25(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[49]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[50]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc26(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[51]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[52]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc27(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[53]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[54]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc28(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[55]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[56]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc29(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[57]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[58]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc30(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[59]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[60]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc31(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[61]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[62]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc32(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[63]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[64]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc33(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[65]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[66]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc34(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[67]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[68]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
}
proc proc35(){
access bSTUT213_L5_NBC_bb8fc44e15[0].dend[69]
a=gIhbar_Ih
fn.vwrite(&a)
a=ehcn_Ih
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTs2_tbar_NaTs2_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
a=gamma_StochKv
fn.vwrite(&a)
a=gkbar_StochKv
fn.vwrite(&a)
a=tha_StochKv
fn.vwrite(&a)
a=qa_StochKv
fn.vwrite(&a)
a=Ra_StochKv
fn.vwrite(&a)
a=Rb_StochKv
fn.vwrite(&a)
a=deterministic_StochKv
fn.vwrite(&a)
access bSTUT213_L5_NBC_bb8fc44e15[0].axon[0]
a=gCabar_Ca
fn.vwrite(&a)
a=gCa_LVAstbar_Ca_LVAst
fn.vwrite(&a)
a=gamma_CaDynamics_E2
fn.vwrite(&a)
a=decay_CaDynamics_E2
fn.vwrite(&a)
a=depth_CaDynamics_E2
fn.vwrite(&a)
a=minCai_CaDynamics_E2
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTa_tbar_NaTa_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSK_E2bar_SK_E2
fn.vwrite(&a)
a=zTau_SK_E2
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
}
proc proc36(){
access bSTUT213_L5_NBC_bb8fc44e15[0].axon[1]
a=gCabar_Ca
fn.vwrite(&a)
a=gCa_LVAstbar_Ca_LVAst
fn.vwrite(&a)
a=gamma_CaDynamics_E2
fn.vwrite(&a)
a=decay_CaDynamics_E2
fn.vwrite(&a)
a=depth_CaDynamics_E2
fn.vwrite(&a)
a=minCai_CaDynamics_E2
fn.vwrite(&a)
a=gImbar_Im
fn.vwrite(&a)
a=gK_Pstbar_K_Pst
fn.vwrite(&a)
a=gK_Tstbar_K_Tst
fn.vwrite(&a)
a=gNap_Et2bar_Nap_Et2
fn.vwrite(&a)
a=gNaTa_tbar_NaTa_t
fn.vwrite(&a)
a=g_pas
fn.vwrite(&a)
a=e_pas
fn.vwrite(&a)
a=gSK_E2bar_SK_E2
fn.vwrite(&a)
a=zTau_SK_E2
fn.vwrite(&a)
a=gSKv3_1bar_SKv3_1
fn.vwrite(&a)
access Exts[0]
access Exts[1]
}
proc printParams(){
fn.wopen("ParamM.dat")
fn2.wopen("KinStates.dat")
writeReversals()
writeGGlobals()
writeNGlobals()
for (ii=0;ii<pmat.nrow();ii+=1){
transvec = pmat.getrow(ii)
tfunc()
finitialize()
proc0()
proc1()
proc2()
proc3()
proc4()
proc5()
proc6()
proc7()
proc8()
proc9()
proc10()
proc11()
proc12()
proc13()
proc14()
proc15()
proc16()
proc17()
proc18()
proc19()
proc20()
proc21()
proc22()
proc23()
proc24()
proc25()
proc26()
proc27()
proc28()
proc29()
proc30()
proc31()
proc32()
proc33()
proc34()
proc35()
proc36()
}
fn.close()
}
printParams()
// End params output
// Start Mat Output
fcurrent()
MyPrintMatrix3()
// endMat Output

MyPrintMatrix3()

// End Fmatrix
// Start Recording Sites
//hoc_stdout("RecList.csv")
PrintRecSites()

quit()

